<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:AindBehaviorPirouetteDataSchema.Rig;assembly=Extensions"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p2="clr-namespace:AindBehaviorPirouetteDataSchema.Session;assembly=Extensions"
                 xmlns:p3="clr-namespace:AindBehaviorPirouetteDataSchema.TaskLogic;assembly=Extensions"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="TaskLogicPath" />
        <Property Name="RigPath" />
        <Property Name="SessionPath" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:ReadSchemas.bonsai">
        <TaskLogicPath />
        <RigPath />
        <SessionPath />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>LoadSchemas</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawRigSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:AindBehaviorPirouetteRig" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawSessionSchema</Name>
            </Expression>
            <Expression xsi:type="p2:DeserializeFromJson">
              <p2:Type xsi:type="TypeMapping" TypeArguments="p2:AindBehaviorSessionModel" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>SessionSchema</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawTaskLogicSchema</Name>
            </Expression>
            <Expression xsi:type="p3:DeserializeFromJson">
              <p3:Type xsi:type="TypeMapping" TypeArguments="p3:AindBehaviorPirouetteTaskLogic" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TaskLogicSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>TaskParameters</Selector>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TaskLogicParameters</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Hardware</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\Onix.bonsai" />
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\Commutator.bonsai" />
            <Expression xsi:type="GroupWorkflow">
              <Name>HarpDevices</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>HarpOutputExpander</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>PortName</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="PortName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\HarpOutputExpander.bonsai">
                    <PortName />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>HarpWhiteRabbit</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>PortName</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="PortName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\HarpWhiteRabbit.bonsai">
                    <PortName>COMx</PortName>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>WhiteRabbitEvents</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT0.2S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="harp:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="harp:CreateOperationControlPayload">
                      <harp:OperationMode>Active</harp:OperationMode>
                      <harp:DumpRegisters>true</harp:DumpRegisters>
                      <harp:MuteReplies>false</harp:MuteReplies>
                      <harp:VisualIndicators>On</harp:VisualIndicators>
                      <harp:OperationLed>On</harp:OperationLed>
                      <harp:Heartbeat>Enabled</harp:Heartbeat>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>WhiteRabbitCommands</Name>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>OutputExpanderCommands</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Cameras</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\CameraController.bonsai" />
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\Cameras.bonsai" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CameraState</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SubscribeWhen" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CamerasReady</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT0.3S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>CameraState</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\Magnetometer.bonsai" />
          </Nodes>
          <Edges />
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:Defer">
        <Name>Logging</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>RootPath</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Path" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\LogController.bonsai">
              <Path>data</Path>
              <ChunkSize>1</ChunkSize>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\RobocopyRoutine.bonsai" />
            <Expression xsi:type="SubscribeSubject">
              <Name>CamerasStream</Name>
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Name>LogVideos</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>this</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>this</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CameraFrameRate</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FrameRate" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>this</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Key</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="LogName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogVideo.bonsai">
                    <Heartbeats />
                    <ClosingDuration xsi:nil="true" />
                    <LogName>VideoData</LogName>
                    <FrameRate>50</FrameRate>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="9" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="9" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source3" />
                  <Edge From="9" To="10" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>WhiteRabbitEvents</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogHarpDemux.bonsai">
              <LogName>OutputExpander</LogName>
              <Heartbeats>Heartbeats</Heartbeats>
              <ClosingDuration>PT2S</ClosingDuration>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>OutputExpanderEvents</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogHarpDemux.bonsai">
              <LogName>OutputExpander</LogName>
              <Heartbeats>Heartbeats</Heartbeats>
              <ClosingDuration>PT2S</ClosingDuration>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CommutatorTurns</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>HarpTimestamp</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Seconds</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateTimestamped" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogData.bonsai">
              <Heartbeats>Heartbeats</Heartbeats>
              <ClosingDuration>PT2S</ClosingDuration>
              <LogName>CommutatorTurns</LogName>
              <Selector xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>AccumulatedCommutatorTurns</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>HarpTimestamp</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Seconds</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateTimestamped" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogData.bonsai">
              <Heartbeats>Heartbeats</Heartbeats>
              <ClosingDuration>PT2S</ClosingDuration>
              <LogName>AccumulatedCommutatorTurns</LogName>
              <Selector xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>OnixHarpSyncData</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>HarpTimestamp</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Seconds</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateTimestamped" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogData.bonsai">
              <Heartbeats />
              <ClosingDuration>PT2S</ClosingDuration>
              <LogName>OnixHarpSyncData</LogName>
              <Selector />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BnoData</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>HarpTimestamp</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Seconds</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateTimestamped" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogData.bonsai">
              <Heartbeats />
              <ClosingDuration>PT2S</ClosingDuration>
              <LogName>OnixBNO055Data</LogName>
              <Selector />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>OnixNeuropixelData</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>HarpTimestamp</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Seconds</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateTimestamped" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\OnixEphys.bonsai" />
            <Expression xsi:type="SubscribeSubject">
              <Name>CommutatorCorrection</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>HarpTimestamp</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Seconds</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateTimestamped" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogData.bonsai">
              <Heartbeats>Heartbeats</Heartbeats>
              <ClosingDuration>PT2S</ClosingDuration>
              <LogName>CommutatorCorrection</LogName>
              <Selector xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>AccumulatedMagnetTurns</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>HarpTimestamp</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Seconds</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateTimestamped" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogData.bonsai">
              <Heartbeats>Heartbeats</Heartbeats>
              <ClosingDuration>PT2S</ClosingDuration>
              <LogName>AccumulatedMagnetTurns</LogName>
              <Selector xsi:nil="true" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="15" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source2" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="18" To="21" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source2" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="24" To="27" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source2" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="30" To="33" Label="Source1" />
            <Edge From="31" To="32" Label="Source1" />
            <Edge From="32" To="33" Label="Source2" />
            <Edge From="33" To="34" Label="Source1" />
            <Edge From="34" To="35" Label="Source1" />
            <Edge From="36" To="39" Label="Source1" />
            <Edge From="37" To="38" Label="Source1" />
            <Edge From="38" To="39" Label="Source2" />
            <Edge From="39" To="40" Label="Source1" />
            <Edge From="40" To="41" Label="Source1" />
            <Edge From="42" To="45" Label="Source1" />
            <Edge From="43" To="44" Label="Source1" />
            <Edge From="44" To="45" Label="Source2" />
            <Edge From="45" To="46" Label="Source1" />
            <Edge From="46" To="47" Label="Source1" />
            <Edge From="48" To="51" Label="Source1" />
            <Edge From="49" To="50" Label="Source1" />
            <Edge From="50" To="51" Label="Source2" />
            <Edge From="51" To="52" Label="Source1" />
            <Edge From="52" To="53" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\Visualizers.bonsai" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>